PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s' % (expName, expInfo['participant'])
  Experiment info = {'participant': '', 'experimenter': '', 'left key': 'z', 'right key': 'm'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = charts
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine setup
    RoutineSettingsComponent setup
      saveStartStop = False
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    CodeComponent imports
      Code Type = Py
      Begin Experiment:
        import random
        import csv
        import string
    CodeComponent set_paths
      Code Type = Py
      Begin Experiment:
        exp_files_dir = "experiment_files"
        conditions = {
            "training": os.path.join(exp_files_dir, "training.csv"),
            "testing": os.path.join(exp_files_dir, "testing.csv")
            }
    CodeComponent init_variables
      Code Type = Py
      Begin Experiment:
        left_key = expInfo["left key"]
        right_key = expInfo["right key"]
        criterion = 32
        consecutive_correct = 0
    CodeComponent randomize_conditions
      Code Type = Py
      Begin Experiment:
        purosis = left_key
        turitis = right_key

        header = ["phase", "muscles", "insulin", "glands", "sinus", "category"]
        muscles_list = ["tense", "relaxed"]
        insulin_list = ["high", "low"]
        glands_list = ["swollen", "recessed"]
        sinus_list = ["stuffy", "runny"]
        categories = [left_key, right_key]

        binary_conditions = [bin(i)[2:].zfill(4) for i in range(16)]
        training_stimuli_a = ["1111", "1100", "0111", "1000"]
        training_stimuli_b = ["0010", "0001", "1010", "0101"]
        training_stimuli = training_stimuli_a + training_stimuli_b
        testing_stimuli = [x for x in binary_conditions if x not in training_stimuli]

        random.shuffle(categories)
        random.shuffle(muscles_list)
        random.shuffle(insulin_list)
        random.shuffle(glands_list)
        random.shuffle(sinus_list)

        with open("./experiment_files/training.csv", mode="w" ,newline="") as f:
            writer = csv.writer(f, delimiter=",", quotechar='"', quoting=csv.QUOTE_ALL)
            writer.writerow(header)
            for bin_con in training_stimuli_a :
                condition = ["training",
                            muscles_list[int(bin_con[0])],
                            insulin_list[int(bin_con[1])],
                            glands_list[int(bin_con[2])],
                            sinus_list[int(bin_con[3])],
                            categories[0]]
                writer.writerow(condition)
            for bin_con in training_stimuli_b:
                condition = ["training",
                            muscles_list[int(bin_con[0])],
                            insulin_list[int(bin_con[1])],
                            glands_list[int(bin_con[2])],
                            sinus_list[int(bin_con[3])],
                            categories[1]]
                writer.writerow(condition)
  Routine feedback
    RoutineSettingsComponent feedback
      saveStartStop = False
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    CodeComponent generate_feedback
      Code Type = Auto->JS
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      Begin Routine:
        correct = False
        feedback = "Incorrect"
        if(subject_response.keys[0] == category):
            correct = True
            feedback = "Correct"
    TextComponent feedback_chart
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $chart_text
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    TextComponent feedback_text
      color [set every repeat] = $"green" if correct else "red" 
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback
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    TextComponent feedback_purosis
      letterHeight = 0.05
      opacity [set every repeat] = 1 if subject_response.keys[0] == purosis else 0
      pos = (-0.35, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = Purosis
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    TextComponent feedback_turitis
      letterHeight = 0.05
      opacity [set every repeat] = 1 if subject_response.keys[0] == turitis else 0
      pos = (.35, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = Turitis
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    CodeComponent update_consecutive_correct
      Code Type = Py
      End Routine:
        if(correct):
            consecutive_correct += 1
        else:
            consecutive_correct = 0

        if(consecutive_correct == criterion):
            training_trials.finished = True
            training_blocks.finished = True
  Routine rate_confidence
    RoutineSettingsComponent rate_confidence
      saveStartStop = False
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    TextComponent confidence_rating_instructions
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = On a scale of 1-7, how confident are you in your diagnosis? (1 being the least confident, and 7 being the most confident)
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    SliderComponent confidence_rating
      forceEndRoutine = True
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine reset
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    CodeComponent reset_consecutive_correct
      Code Type = Py
      Begin Routine:
        consecutive_correct = 0
  Routine show_stim
    RoutineSettingsComponent show_stim
      saveStartStop = False
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    CodeComponent format_patient_chart
      Code Type = Py
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      Begin Routine:
        header = ["Muscles", "Insulin", "Glands", "Sinus"]
        symptoms = [muscles, insulin, glands, sinus]

        chart = [f"{x}: {y}" for x, y in zip(header, symptoms)]
        chart_text = "\n".join(chart)
    TextComponent patient_chart
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $chart_text
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    TextComponent purosis_text
      letterHeight = 0.05
      pos = (-0.35, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Purosis
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    TextComponent turitis_text
      letterHeight = 0.05
      pos = (.35, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Turitis
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    TextComponent answer
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"{category}"
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    KeyboardComponent subject_response
      allowedKeys = left_key, right_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine training_instructions
    RoutineSettingsComponent training_instructions
      saveStartStop = False
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    TextComponent training_instructions_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Imagine you are a medical intern learning to diagnose patients suffering from one of two diseases. You will learn to make your diagnoses by attempting to diagnose individual patients: you will be shown a patient chart listing four symptoms, use the LEFT and RIGHT keys to choose a diagnosis, and then you will be told if it was correct or not.

        Your training will be complete after diagnosing approximately 32 patients in a row.

        Press either the LEFT or RIGHT key to begin.
    CodeComponent training_instructions_text_align
      Code Type = Py
      Begin Routine:
        training_instructions_text.alignText = "left"
    KeyboardComponent training_instructions_response
      allowedKeys = left_key, right_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine testing_instructions
    RoutineSettingsComponent testing_instructions
      saveStartStop = False
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    TextComponent testing_instructions_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now you will be tested on the knowledge you have gained by diagnosing 32 additional patients.  Each time you will be asked to rate how confident you are on your diagnosis on a scale of 1-7.

        Press either the LEFT or RIGHT key to begin.
    CodeComponent testing_instructions_text_align
      Code Type = Py
      Begin Routine:
        testing_instructions_text.alignText = "left"
    KeyboardComponent testing_instructions_response
      allowedKeys = left_key, right_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_instructions
    RoutineSettingsComponent end_instructions
      saveStartStop = False
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    TextComponent end_instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        End of the experiment.

        Please inform the experimenter that you are done.

        Press either the LEFT or RIGHT key to quit.
    KeyboardComponent end_response
      allowedKeys = left_key, right_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine explain_methods
    RoutineSettingsComponent explain_methods
      saveStartStop = False
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    CodeComponent input_text_handler
      Code Type = Py
      Begin Experiment:
        input_text = ""
        explanation_keys = list(string.ascii_letters) + list(string.digits) + ["period", "comma", "space", "return", "lshift", "rshift", "backspace"]
      Begin Routine:
        shift_flag = False
        prompt = "Please describe the methods you used to make your diagnoses. Press \"enter\" to submit."
      Each Frame:
        n= len(subject_explanation.keys)
        i = 0
        input_text = ""
        while i < n:

            if subject_explanation.keys[i] == 'return':
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif subject_explanation.keys[i] == 'backspace':
                input_text = input_text[:-1]  # lose the final character
                i = i + 1

            elif subject_explanation.keys[i] == 'space':
                input_text += ' '
                i = i + 1

            elif subject_explanation.keys[i] == "period":
                input_text += "."
                i += 1

            elif subject_explanation.keys[i] == "comma":
                input_text += ","
                i += 1

            elif subject_explanation.keys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1

            else:
                if len(subject_explanation.keys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        input_text += chr( ord(subject_explanation.keys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        input_text += subject_explanation.keys[i]

                i = i + 1
      End Routine:
        # let's store the final text string into the results file...
        thisExp.addData('subject_methods_explanation', input_text)
    TextComponent subject_methods_explanation
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $(prompt + "\n\n" + input_text)
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    CodeComponent subject_methods_explanation_text_align
      Code Type = Py
      Each Frame:
        subject_methods_explanation.textAlign = "left"
    KeyboardComponent subject_explanation
      allowedKeys = explanation_keys
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine copyright
    RoutineSettingsComponent copyright
      saveStartStop = False
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    TextComponent copyright_info
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Charts, running on PsychoPy (v.2024.1.4)

        Charts is a neuroscience experiment to test the generalization performance of individuals.

           Copyright (C) 2024 Jose Mojica Perez

        This program is free software: you can redistribute it and/or modify it under the terms of the GNU Affero General Public License as published by the Free Software Foundation, either version 3 of the License, or (at your option) any later version. This program is distributed in the hope that it will be useful, but WITHOUT ANY WARRANTY; without even the implied warranty of MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the GNU Affero General Public License for more details. You should have received a copy of the GNU Affero General Public License along with this program.  If not, see <https://www.gnu.org/licenses/>.

        Press the LEFT or RIGHT key to continue.
    CodeComponent copyright_info_text_align
      Code Type = Py
      Begin Routine:
        copyright_info.alignText = "left"
    KeyboardComponent copyright_response
      allowedKeys = left_key, right_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  Routine copyright
  Routine training_instructions
  LoopInitiator training_blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 15
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    conditions:
      [OrderedDict([('binary_representation', 1111), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'runny'), ('category', 'm'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 1111), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'runny'), ('category', 'm'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 1100), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'm'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 1100), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'm'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 111), ('muscles', 'relaxed'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'runny'), ('category', 'm'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 111), ('muscles', 'relaxed'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'runny'), ('category', 'm'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 1000), ('muscles', 'tense'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'm'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 1000), ('muscles', 'tense'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'm'), ('phase', 'training')])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
    LoopInitiator training_trials loopType="TrialHandler"
      conditionsFile = experiment_files/training.csv
      loopType = random
      nReps = 2
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      conditions:
        [OrderedDict([('phase', 'training'), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'runny'), ('category', 'z')]),
        OrderedDict([('phase', 'training'), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'stuffy'), ('category', 'z')]),
        OrderedDict([('phase', 'training'), ('muscles', 'relaxed'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'runny'), ('category', 'z')]),
        OrderedDict([('phase', 'training'), ('muscles', 'tense'), ('insulin', 'low'), ('glands', 'swollen'), ('sinus', 'stuffy'), ('category', 'z')]),
        OrderedDict([('phase', 'training'), ('muscles', 'relaxed'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'm')]),
        OrderedDict([('phase', 'training'), ('muscles', 'relaxed'), ('insulin', 'low'), ('glands', 'swollen'), ('sinus', 'runny'), ('category', 'm')]),
        OrderedDict([('phase', 'training'), ('muscles', 'tense'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'm')]),
        OrderedDict([('phase', 'training'), ('muscles', 'relaxed'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'runny'), ('category', 'm')])]
      Routine show_stim
      Routine feedback
    LoopTerminator training_trials
  LoopTerminator training_blocks
  Routine testing_instructions
  LoopInitiator testing_blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('binary_representation', 10), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'T'), ('phase', 'testing')]),
      OrderedDict([('binary_representation', 11), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'runny'), ('category', 'T'), ('phase', 'testing')]),
      OrderedDict([('binary_representation', 100), ('muscles', 'tense'), ('insulin', 'low'), ('glands', 'swollen'), ('sinus', 'stuffy'), ('category', 'T'), ('phase', 'testing')]),
      OrderedDict([('binary_representation', 110), ('muscles', 'tense'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'T'), ('phase', 'testing')]),
      OrderedDict([('binary_representation', 1001), ('muscles', 'relaxed'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'runny'), ('category', 'T'), ('phase', 'testing')]),
      OrderedDict([('binary_representation', 1011), ('muscles', 'relaxed'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'runny'), ('category', 'T'), ('phase', 'testing')]),
      OrderedDict([('binary_representation', 1101), ('muscles', 'relaxed'), ('insulin', 'low'), ('glands', 'swollen'), ('sinus', 'runny'), ('category', 'T'), ('phase', 'testing')]),
      OrderedDict([('binary_representation', 1110), ('muscles', 'relaxed'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'T'), ('phase', 'testing')])]
    LoopInitiator testing_trials loopType="TrialHandler"
      conditionsFile = experiment_files/testing.csv
      loopType = random
      nReps = 2
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      conditions:
        [OrderedDict([('phase', 'testing'), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'stuffy')]),
        OrderedDict([('phase', 'testing'), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'runny')]),
        OrderedDict([('phase', 'testing'), ('muscles', 'tense'), ('insulin', 'low'), ('glands', 'swollen'), ('sinus', 'stuffy')]),
        OrderedDict([('phase', 'testing'), ('muscles', 'tense'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'stuffy')]),
        OrderedDict([('phase', 'testing'), ('muscles', 'relaxed'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'runny')]),
        OrderedDict([('phase', 'testing'), ('muscles', 'relaxed'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'runny')]),
        OrderedDict([('phase', 'testing'), ('muscles', 'relaxed'), ('insulin', 'low'), ('glands', 'swollen'), ('sinus', 'runny')]),
        OrderedDict([('phase', 'testing'), ('muscles', 'relaxed'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'stuffy')])]
      Routine show_stim
      Routine rate_confidence
    LoopTerminator testing_trials
  LoopTerminator testing_blocks
  Routine explain_methods
  Routine end_instructions
