PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Data filename = u'data/%s_%s' % (expName, expInfo['Participant'])
  Experiment info = {'Participant': '', 'Experimenter': '', 'Language': 'english', 'Condition': 'C', 'Number of pairs': '8', 'Evaluate to criterion or fixed number of trials?': 'criterion', 'Training phase max blocks': '6', 'Testing phase max blocks': '6'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  color = 1.0000, 1.0000, 1.0000
  expName = Choose34
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent imports
      Code Type = Py
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      Before Experiment:
        import random
        import csv
        import datetime
    CodeComponent validateExpInfo
      Code Type = Py
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      Begin Experiment:
        if(expInfo["Condition"] != "C" and expInfo["Condition"] != "S"):
            print("Condition must be \"C\" or \"S\"", file=sys.stderr)
            exit()
        if(not expInfo["Number of pairs"].isdigit()):
           print("Number of pairs must be a positive number in the range [1,8]", file=sys.stderr)
           exit()
        if(int(expInfo["Number of pairs"]) > 8 or int(expInfo["Number of pairs"]) < 1):
            print("Number of pairs must be in the range [1,8]", file=sys.stderr)
            exit()

        critOrFixed = expInfo["Evaluate to criterion or fixed number of trials?"]
        if(critOrFixed in set(["criterion", "Criterion"])):
            evalToCriterion = True
        elif(critOrFixed in set(["fixed", "Fixed"])):
            evalToCriterion = False
        else:
            print("Evaluate to criterion or fixed number of trials must set to either 'criterion' or 'fixed'", file=sys.stderr)
            exit()

        if(not expInfo["Training phase max blocks"].isdigit() or not expInfo["Testing phase max blocks"].isdigit()):
            print("Max blocks must be a number", file=sys.stderr)
            exit()
    CodeComponent constants
      Code Type = Py
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      Before Experiment:
        assetsPath = os.path.join(os.getcwd(), "assets")
        trainingPath =  os.path.join(assetsPath, "training")
        testingPath = os.path.join(assetsPath, "testing")
        expFilesPath = os.path.join(os.getcwd(), "experimentFiles")
        dataPath = os.path.join(os.getcwd(), "data")
        summariesPath = os.path.join(dataPath, "summaries")

        if(not os.path.exists(dataPath)):
            os.mkdir(dataPath)
        if(not os.path.exists(summariesPath)):
            os.mkdir(summariesPath)
        if(not os.path.exists(expFilesPath)):
            os.mkdir(expFilesPath)


        expDateTime = datetime.datetime.now()
        # Weekday(full name), Month(full name) Day(dd), Year(yyyy)
        date = "\"" + expDateTime.strftime("%A, %B %d, %Y") + "\""
        # Hour(00-12):Minute(00-59):Second(00-59) AM/PM
        time = "\"" + expDateTime.strftime("%I:%M:%S %p") + "\""

        stimsFieldNames = ["Left_Stim", "Right_Stim"]
        leftKey = 'z'
        rightKey = 'm'

        practicePair = ["circle", "triangle"]

        # Stores the testing phase equivalent of every pair ofobjects
        # from the training phase. Each entry is one pair:
        # pairs[<(trainObj1, trainObj2)>] == (testObj1, testObj2)
        pairs = {
            ("s3c1", "s3c2"): ("s3c1", "s3c2"),
            ("s1c3", "s2c3"): ("s1c96", "s2c96"),
            ("s10c8", "s10c98"): ("s13c8", "s13c98"),
            ("s8c11", "s9c11"): ("s8c26", "s9c26"),
            ("s18c15", "s18c16"): ("s21c15", "s21c16"),
            ("s15c17", "s16c17"): ("s15c5", "s16c5"),
            ("s24c22", "s24c23"): ("s25c22", "s25c23"),
            ("s22c24", "s23c24"): ("s22c25", "s23c25")
            }
      Begin Experiment:
        delPairs = 8 - int(expInfo["Number of pairs"])
        if(delPairs > 0):
            pairsToDelete = random.sample(pairs.keys(), delPairs)
            for pair in pairsToDelete:
                pairs.pop(pair)
    CodeComponent initializeVars
      Code Type = Py
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      Before Experiment:
        # This dictionary tells which object has a smiley
        # it has the format {<object_name> : True/False}.
        hasSmiley = {}

        # First practice answer is always wrong. So we assigned the smiley AFTER
        # subject's response. We use this variable to determine if we have assigned
        # the smiley yet
        firstChoice = True

        # We use this variable to determine what phase we are in and
        # update it accordingly
        currentPhase = "practice"

        # Changes on trialLoop
        consecutiveCorrectResponses = 0

        # Initialized to avoid errors
        Right_Stim = ""
        Left_Stim = ""

        evalToCriterion = True

        showPostPractice = True
      Begin Experiment:
        # Number of consecutive correct responses needed to move to next phase
        # this changes in the trialBlocks loop
        criterion = int(expInfo["Number of pairs"]) * 2

        trialNumReps = {"practice": 6,
                        "training" : int(expInfo["Training phase max blocks"]),
                        "testing" : int(expInfo["Testing phase max blocks"])
                        }
    CodeComponent assignSmiley
      Code Type = Py
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      Begin Experiment:
        practice0, practice1 = practicePair

        # Initially both practice objects have no smiley. This changes based on the
        # subject's first choice.
        hasSmiley[practice0] = False
        hasSmiley[practice1] = False

        for pair in pairs:
            train0, train1 = pair
            test0, test1 = pairs[pair]

            r = random.randint(0,1)

            if(r == 0):
                hasSmiley[train0] = True
                hasSmiley[train1] = False
                hasSmiley[test0] = True
                hasSmiley[test1] = False
            else:
                hasSmiley[train0] = False
                hasSmiley[train1] = True
                hasSmiley[test0] = False
                hasSmiley[test1] = True
    CodeComponent generateStimFiles
      Code Type = Py
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      Begin Experiment:
        with open(os.path.join(expFilesPath, "training.csv"), "w") as f1:
            with open(os.path.join(expFilesPath, "testing.csv"), "w") as f2:
                f1.write("Left_Stim,Right_Stim,Correct_Response\n")
                f2.write("Left_Stim,Right_Stim,Correct_Response\n")
                for pair in pairs:
                    train0, train1 = pair
                    test0, test1 = pairs[pair]
                    if(hasSmiley[train0] and hasSmiley[test0]):
                        f1.write(f"{train0},{train1},left\n")
                        f1.write(f"{train1},{train0},right\n")
                        f2.write(f"{test0},{test1},left\n")
                        f2.write(f"{test1},{test0},right\n")
                    else:
                        f1.write(f"{train0},{train1},right\n")
                        f1.write(f"{train1},{train0},left\n")
                        f2.write(f"{test0},{test1},right\n")
                        f2.write(f"{test1},{test0},left\n")

        with open(os.path.join(expFilesPath, "practice.csv"), "w") as f:
            f.write("Left_Stim,Right_Stim\n")
            practice0, practice1 = practicePair
            f.write(f"{practice0},{practice1}\n")
            f.write(f"{practice1},{practice0}\n")
    CodeComponent dataSummaryVars
      Code Type = Py
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      Before Experiment:
        trainAccuracy = 0
        trainAvgRT = 0.0
        trainError = 0
        trainTrials = 0

        probeAccuracy = 0
        probeAvgRT = 0.0
        probeError = 0
        probeTrials = 0
    CodeComponent language
      Code Type = Py
      Begin Experiment:
        language = expInfo["Language"].lower()
        if(language == "spanish" or language == "español"):
            language = "spanish"
        elif(language == "english"):
            language = "english"

        texts = {}

        with open(os.path.join(expFilesPath, "texts.csv"), mode="r", newline="", encoding="utf-8") as csvfile:
            reader = csv.DictReader(csvfile)
            for row in reader:
                texts[row["text_object"]] = row[language].replace("\\n","\n")
  Routine choose
    CodeComponent setImgsPaths
      Code Type = Py
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      Begin Routine:
        leftImgPath = os.path.join(assetsPath, currentPhase, Left_Stim + ".png")
        rightImgPath = os.path.join(assetsPath, currentPhase, Right_Stim + ".png")
    ImageComponent leftStim
      image [set every repeat] = $leftImgPath
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    ImageComponent rightStim
      image [set every repeat] = $rightImgPath
      pos = (0.25, 0)
      saveStartStop = False
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    ImageComponent floorLine
      image = assets/line.png
      pos = (0, -0.08)
      saveStartStop = False
      size = (0.75, 0.0125)
      startVal [time (s)] = 0.0
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    TextComponent textPrompt
      color = black
      letterHeight = 0.035
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $texts["textPrompt"]
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    KeyboardComponent Subject_Response
      allowedKeys = leftKey, rightKey
      correctAns = $(leftKey if hasSmiley[Left_Stim] else rightKey if hasSmiley[Right_Stim] else '')
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent correctResponse
      Code Type = Py
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      End Routine:
        correctResponse = False

        if(Subject_Response.keys == leftKey and hasSmiley[Left_Stim]):
            consecutiveCorrectResponses += 1
            correctResponse = True
        elif(Subject_Response.keys == rightKey and hasSmiley[Right_Stim]):
            consecutiveCorrectResponses += 1
            correctResponse = True
        else:
            consecutiveCorrectResponses = 0
    CodeComponent practiceAssignSmiley
      Code Type = Py
      End Routine:
        if(firstChoice and Subject_Response.keys == leftKey):
            hasSmiley[Right_Stim] = True
            hasSmiley[Left_Stim] = False
            firstChoice = False
        elif(firstChoice and Subject_Response.keys == rightKey):
            hasSmiley[Right_Stim] = False
            hasSmiley[Left_Stim] = True
            firstChoice = False
    CodeComponent updateSummaryVars
      Code Type = Py
      End Routine:
        if(currentPhase == "training"):
            trainTrials += 1
            trainAvgRT += Subject_Response.rt
            if(correctResponse):
                trainAccuracy += 1
            else:
                trainError += 1
        elif(currentPhase == "testing"):
            probeTrials += 1
            probeAvgRT += Subject_Response.rt
            if(correctResponse):
                probeAccuracy += 1
            else:
                probeError += 1
  Routine reveal
    ImageComponent leftStimReveal
      image [set every repeat] = $leftImgPath
      pos [set every frame] = [-0.25, min(0.1, frameN/100)] if (Subject_Response.keys == leftKey) else [-0.25, 0]
      saveStartStop = False
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent rightStimReveal
      image [set every repeat] = $rightImgPath
      pos [set every frame] = [0.25, min(0.1, frameN/100)] if (Subject_Response.keys == rightKey) else [0.25, 0]
      saveStartStop = False
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent smileyReveal
      image = assets/smiley.png
      opacity [set every repeat] = 1 if correctResponse else 0 
      pos [set every repeat] = (-0.25, 0) if hasSmiley[Left_Stim] else (0.25,0)
      saveStartStop = False
      size = (0.0625, 0.0625)
      startVal [time (s)] = 0.15
      stopVal [duration (s)] = 0.85
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    ImageComponent floorLineReveal
      image = assets/line.png
      pos = (0, -0.08)
      saveStartStop = False
      size = (0.75, 0.0125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent textPrompt2
      color = black
      letterHeight = 0.035
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every frame] = $texts["textPrompt2"]
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    CodeComponent earlyTransition
      Code Type = Py
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      Begin Routine:
        if(consecutiveCorrectResponses >= criterion):
                trialLoop.finished = True
  Routine experimentInstructions
    TextComponent instructions1
      color = black
      letterHeight = 0.035
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $texts["instructions1"]
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    ImageComponent smileySample
      image = assets/smiley.png
      saveStartStop = False
      size = (0.0625, 0.0625)
      startVal [time (s)] = 0.0
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    TextComponent instructions2
      color = black
      letterHeight = 0.035
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $texts["instructions2"]
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    KeyboardComponent expInstructionsResponse
      allowedKeys = 'z','m'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trialSetup
    CodeComponent trialSetupCode
      Code Type = Py
      Begin Routine:
        trialConditionsFile = "./experimentFiles/" + currentPhase + ".csv"

        consecutiveCorrectResponses = 0
        transitionedEarly = False

        if(currentPhase == "practice"):
            criterion = 3
        elif(evalToCriterion):
            criterion = int(expInfo["Number of pairs"]) * 2
        else:
            criterion = float("inf")
  Routine endExperiment
    CodeComponent writeSummary
      Code Type = Py
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      Begin Routine:
        trainAccuracy /= trainTrials
        trainAvgRT /= trainTrials

        probeAccuracy /= probeTrials
        probeAvgRT /= probeTrials
        info = {
                "subject": expInfo["Participant"],
                "experiment": expName,
                "experimenter": expInfo["Experimenter"],
                "date": date,
                "time": time,
                "condition": expInfo["Condition"],
                "task": "P",
                "train_accuracy": trainAccuracy,
                "train_errors": trainError,
                "train_avg_rt": trainAvgRT,
                "train_trials": trainTrials,
                "probe_accuracy": probeAccuracy,
                "probe_errors": probeError,
                "probe_rt_avg": probeAvgRT,
                "probe_trials": probeTrials
            }

        summary_file = os.path.join(summariesPath, f"{expName}_{expInfo['Participant']}_summary.csv")
        with open(summary_file, "w", newline="") as csvfile:
            writer = csv.writer(csvfile, delimiter=',', quotechar='"', quoting=csv.QUOTE_NONNUMERIC)
            writer.writerow([key for key in info])
            writer.writerow([val for val in info.values()])
    TextComponent endText
      color = black
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $texts["endText"]
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    KeyboardComponent endResp
      allowedKeys = leftKey, rightKey
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine copyrightInfo
    TextComponent copyright
      color = black
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Choose 34, running on PsychoPy (v.2023.1.2)

        Choose 34 is a neuroscience experiment to test the generalization performance of individuals.
           Copyright (C) 2023 Jose Mojica Perez

            This program is free software: you can redistribute it and/or modify
            it under the terms of the GNU Affero General Public License as
            published by the Free Software Foundation, either version 3 of the
            License, or (at your option) any later version.

            This program is distributed in the hope that it will be useful,
            but WITHOUT ANY WARRANTY; without even the implied warranty of
            MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
            GNU Affero General Public License for more details.

            You should have received a copy of the GNU Affero General Public License
            along with this program.  If not, see <https://www.gnu.org/licenses/>.

        Press either the "LEFT" or "RIGHT" key to continue.
    KeyboardComponent copyrightResponse
      allowedKeys = leftKey, rightKey
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine reference
    TextComponent referenceText
      color = black
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Design is adapted from the task originally described in:
        Myers, C. E., Kluger, A., Golomb, J., Ferris, S., de Leon, M., Schnirman, G. & Gluck, M.
        (2002). Hippocampal atrophy disrupts transfer generalization in non-demented elderly.
        Journal of Geriatric Psychiatry and Neurology, 15(2), 82-90. PMID: 12083598;
        doi:10.1177/089198870201500206

        Design is based on the description of Choose 33 written by Catherine E. Myers.

        Press either the "LEFT" or "RIGHT" key to continue.
    KeyboardComponent referenceResponse
      allowedKeys = leftKey, rightKey
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine postPracticeInstructions
    TextComponent postPracticeText
      color = black
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $texts["postPracticeText"]
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    KeyboardComponent postPracticeResp
      allowedKeys = leftKey, rightKey
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent updateShowPostPractice
      Code Type = Py
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      Begin Routine:
        showPostPractice = False
Flow
  Routine setup
  Routine copyrightInfo
  Routine reference
  Routine experimentInstructions
  LoopInitiator phasesLoop loopType="TrialHandler"
    conditionsFile = experimentFiles/phases.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('currentPhase', 'practice')]),
      OrderedDict([('currentPhase', 'training')]),
      OrderedDict([('currentPhase', 'testing')])]
    Routine trialSetup
    LoopInitiator trialLoop loopType="TrialHandler"
      conditionsFile = $(trialConditionsFile)
      loopType = random
      nReps = trialNumReps[currentPhase]
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      conditions:
        [OrderedDict([('pair', 'practice'), ('Left_Stim', 's3c1'), ('Right_Stim', 's3c2')]),
        OrderedDict([('pair', 'practice'), ('Left_Stim', 's3c2'), ('Right_Stim', 's3c1')])]
      Routine choose
      Routine reveal
    LoopTerminator trialLoop
    LoopInitiator postPracticeScreenLoop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 1 if showPostPractice else 0
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      Routine postPracticeInstructions
    LoopTerminator postPracticeScreenLoop
  LoopTerminator phasesLoop
  Routine endExperiment
