PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Data filename = u'data/%s_%s' % (expName, expInfo['Participant'])
  Experiment info = {'Participant': '', 'Experimenter': '', 'Language': 'english', 'Number of pairs': '4', 'Evaluate to criterion or fixed number of trials?': 'fixed', 'Training phase max blocks': '4', 'Testing phase max blocks': '4', 'Left Key': 'b', 'Right Key': 'r'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.1.3
  Window size (pixels) = [1920, 1200]
  color = 1.0000, 1.0000, 1.0000
  expName = Choose_fMRI
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine setup
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    CodeComponent imports
      Code Type = Py
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      Before Experiment:
        import random
        import csv
        import datetime
    CodeComponent validate_exp_info
      Code Type = Py
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      Begin Experiment:
        # number of pairs
        if(not expInfo["Number of pairs"].isdigit()):
           print("Number of pairs must be a positive number in the range [1,4]", file=sys.stderr)
           exit()
        if(int(expInfo["Number of pairs"]) > 4 or int(expInfo["Number of pairs"]) < 1):
            print("Number of pairs must be in the range [1,4]", file=sys.stderr)
            exit()

        # Left and right keys
        if(len(expInfo["Left Key"]) < 1):
            print("The Left Key parameter is empty. You must specify a vaild key.", file=sys.stderr)
            exit()
        if(len(expInfo["Right Key"]) < 1):
            print("The Right Key parameter is empty. You must specify a vaild key.", file=sys.stderr)
            exit()

        # Criterion or fixed
        crit_or_fixed = expInfo["Evaluate to criterion or fixed number of trials?"]
        if(crit_or_fixed.lower() == "criterion"):
            eval_to_criterion = True
        elif(crit_or_fixed.lower() == "fixed"):
            eval_to_criterion = False
        else:
            print("Evaluate to criterion or fixed number of trials must set to either 'criterion' or 'fixed'", file=sys.stderr)
            exit()

        # Max trial blocks
        if(not expInfo["Training phase max blocks"].isdigit() or not expInfo["Testing phase max blocks"].isdigit()):
            print("Max blocks must be a number", file=sys.stderr)
            exit()
    CodeComponent constants
      Code Type = Py
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      Before Experiment:
        assets_path = os.path.join(os.getcwd(), "assets")
        training_path =  os.path.join(assets_path, "training")
        testing_path = os.path.join(assets_path, "testing")
        exp_files_path = os.path.join(os.getcwd(), "experiment_files")
        data_path = os.path.join(os.getcwd(), "data")
        summaries_path = os.path.join(data_path, "summaries")

        if(not os.path.exists(data_path)):
            os.mkdir(data_path)
        if(not os.path.exists(summaries_path)):
            os.mkdir(summaries_path)
        if(not os.path.exists(exp_files_path)):
            os.mkdir(exp_files_path)


        exp_date_time = datetime.datetime.now()
        # Weekday(full name), Month(full name) Day(dd), Year(yyyy)
        date = "\"" + exp_date_time.strftime("%A, %B %d, %Y") + "\""
        # Hour(00-12):Minute(00-59):Second(00-59) AM/PM
        time = "\"" + exp_date_time.strftime("%I:%M:%S %p") + "\""

        stims_field_names = ["Left_Stim", "Right_Stim"]

        practice_pair = ["circle", "triangle"]

        # Stores the testing phase equivalent of every pair ofobjects
        # from the training phase. Each entry is one pair:
        # pairs[<(trainObj1, trainObj2)>] == (testObj1, testObj2)
        # In this case the pairs are named (0a, 0b), (1a, 1b), etc. Regardless if
        # they are training or testing.
        pairs = {}
        for i in range(0, 4):
            pair = (str(i) + "a", str(i) + "b")
            pairs[pair] = pair
      Begin Experiment:
        del_pairs = 4 - int(expInfo["Number of pairs"])
        if(del_pairs > 0):
            pairs_to_delete = random.sample(pairs.keys(), del_pairs)
            for pair in pairs_to_delete:
                pairs.pop(pair)

        left_key = expInfo["Left Key"]
        right_key = expInfo["Right Key"]
    CodeComponent initialize_vars
      Code Type = Py
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      Before Experiment:
        # This dictionary tells which object has a smiley
        # it has the format {<object_name> : True/False}.
        has_smiley = {}

        # First practice answer is always wrong. So we assigned the smiley AFTER
        # subject's response. We use this variable to determine if we have assigned
        # the smiley yet
        first_choice = True

        # We use this variable to determine what phase we are in and
        # update it accordingly
        current_phase = "practice"

        # Changes on trialLoop
        consecutive_correct_responses = 0

        # Initialized to avoid errors
        Right_Stim = ""
        Left_Stim = ""

        eval_to_criterion = True

        show_post_practice = True
      Begin Experiment:
        # Number of consecutive correct responses needed to move to next phase
        # this changes in the trialBlocks loop
        criterion = int(expInfo["Number of pairs"]) * 2

        trial_num_reps = {"practice": 6,
                        "training" : int(expInfo["Training phase max blocks"]),
                        "testing" : int(expInfo["Testing phase max blocks"])
                        }
    CodeComponent assign_smiley
      Code Type = Py
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      Begin Experiment:
        practice0, practice1 = practice_pair

        # Initially both practice objects have no smiley. This changes based on the
        # subject's first choice.
        has_smiley[practice0] = False
        has_smiley[practice1] = False

        for pair in pairs:
            train0, train1 = pair
            test0, test1 = pairs[pair]

            r = random.randint(0,1)

            if(r == 0):
                has_smiley[train0] = True
                has_smiley[train1] = False
                has_smiley[test0] = True
                has_smiley[test1] = False
            else:
                has_smiley[train0] = False
                has_smiley[train1] = True
                has_smiley[test0] = False
                has_smiley[test1] = True
    CodeComponent generate_stim_files
      Code Type = Py
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      Begin Experiment:
        with open(os.path.join(exp_files_path, "training.csv"), "w") as f1:
            with open(os.path.join(exp_files_path, "testing.csv"), "w") as f2:
                f1.write("Left_Stim,Right_Stim,Correct_Response,Relevant_Feature\n")
                f2.write("Left_Stim,Right_Stim,Correct_Response,Relevant_Feature\n")
                for pair in pairs:
                    train0, train1 = pair
                    test0, test1 = pairs[pair]
                    if(has_smiley[train0] and ("0" in train0 or "1" in train0)):
                        f1.write(f"{train0},{train1},left,color\n")
                        f1.write(f"{train1},{train0},right,color\n")
                        f2.write(f"{test0},{test1},left,color\n")
                        f2.write(f"{test1},{test0},right,color\n")
                    elif(has_smiley[train0] and ("2" in train0 or "3" in train0)):
                        f1.write(f"{train0},{train1},left,shape\n")
                        f1.write(f"{train1},{train0},right,shape\n")
                        f2.write(f"{test0},{test1},left,shape\n")
                        f2.write(f"{test1},{test0},right,shape\n")
                    elif(has_smiley[train1] and ("0" in train0 or "1" in train1)):
                        f1.write(f"{train1},{train0},left,color\n")
                        f1.write(f"{train0},{train1},right,color\n")
                        f2.write(f"{test1},{test0},left,color\n")
                        f2.write(f"{test0},{test1},right,color\n")
                    elif(has_smiley[train1] and ("2" in train0 or "3" in train0)):
                        f1.write(f"{train1},{train0},left,shape\n")
                        f1.write(f"{train0},{train1},right,shape\n")
                        f2.write(f"{test1},{test0},left,shape\n")
                        f2.write(f"{test0},{test1},right,shape\n")

        with open(os.path.join(exp_files_path, "practice.csv"), "w") as f:
            f.write("Left_Stim,Right_Stim\n")
            practice0, practice1 = practice_pair
            f.write(f"{practice0},{practice1}\n")
            f.write(f"{practice1},{practice0}\n")
    CodeComponent data_summary_vars
      Code Type = Py
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      Before Experiment:
        train_accuracy = 0
        train_avg_RT = 0.0
        train_error = 0
        train_trials = 0

        probe_accuracy = 0
        probe_avg_RT = 0.0
        probe_error = 0
        probe_trials = 0
    CodeComponent language
      Code Type = Py
      Begin Experiment:
        supported_languages = ["english", "español"]

        language = expInfo["Language"].lower()
        if(language == "spanish" or language == "español"):
            language = "spanish"
        elif(language == "english"):
            language = "english"
        else:
            print("Language not supported. The supported languages are:", file=sys.stderr)
            for lang in supported_languages:
                print(lang, file=sys.stderr)

        texts = {}

        with open(os.path.join(exp_files_path, "texts.csv"), mode="r", newline="", encoding="utf-8") as csvfile:
            reader = csv.DictReader(csvfile)
            for row in reader:
                texts[row["text_object"]] = row[language].replace("\\n","\n")
  Routine choose
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    ImageComponent left_stim
      image [set every repeat] = $left_img_path
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent right_stim
      image [set every repeat] = $right_img_path
      pos = (0.25, 0)
      saveStartStop = False
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent floor_line
      image = assets/line.png
      pos = (0, -0.08)
      saveStartStop = False
      size = (0.75, 0.0125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent text_prompt
      color = black
      letterHeight = 0.035
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $texts["text_prompt"]
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    KeyboardComponent subject_response
      allowedKeys = left_key, right_key
      correctAns = $(left_key if has_smiley[Left_Stim] else right_key if has_smiley[Right_Stim] else '')
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      storeCorrect = True
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    CodeComponent correct_response
      Code Type = Py
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      End Routine:
        correct_response = False

        if(subject_response.keys == left_key and has_smiley[Left_Stim]):
            consecutive_correct_responses += 1
            correct_response = True
        elif(subject_response.keys == right_key and has_smiley[Right_Stim]):
            consecutive_correct_responses += 1
            correct_response = True
        # Only wrong answers reset the consecutive correct responses
        # if the subject doesn't respond on time then we just
        # ignore that it happened
        elif(subject_response.keys):
            consecutive_correct_responses = 0
    CodeComponent practice_assign_smiley
      Code Type = Py
      End Routine:
        if(first_choice and subject_response.keys == left_key):
            has_smiley[Right_Stim] = True
            has_smiley[Left_Stim] = False
            first_choice = False
        elif(first_choice and subject_response.keys == right_key):
            has_smiley[Right_Stim] = False
            has_smiley[Left_Stim] = True
            first_choice = False
    CodeComponent update_summary_vars
      Code Type = Py
      End Routine:
        # type(subject_response.rt) == float is True
        # if the subject responded within the alloted time (3 secs)
        if(current_phase == "training" and type(subject_response.rt) == float):
            train_trials += 1
            train_avg_RT += subject_response.rt
            if(correct_response):
                train_accuracy += 1
            else:
                train_error += 1
        elif(current_phase == "testing" and type(subject_response.rt) == float):
            probe_trials += 1
            probe_avg_RT += subject_response.rt
            if(correct_response):
                probe_accuracy += 1
            else:
                probe_error += 1
  Routine reveal
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    ImageComponent left_stim_reveal
      image [set every repeat] = $left_img_path
      pos [set every frame] = [-0.25, min(0.1, frameN/100)] if (subject_response.keys == left_key) else [-0.25, 0]
      saveStartStop = False
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent right_stim_reveal
      image [set every repeat] = $right_img_path
      pos [set every frame] = [0.25, min(0.1, frameN/100)] if (subject_response.keys == right_key) else [0.25, 0]
      saveStartStop = False
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent smiley_reveal
      image = assets/smiley.png
      opacity [set every repeat] = 1 if correct_response else 0 
      pos [set every repeat] = (-0.25, 0) if has_smiley[Left_Stim] else (0.25,0)
      saveStartStop = False
      size = (0.0625, 0.0625)
      startVal [time (s)] = 0.15
      stopVal [duration (s)] = 0.85
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    ImageComponent floor_line_reveal
      image = assets/line.png
      pos = (0, -0.08)
      saveStartStop = False
      size = (0.75, 0.0125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_prompt2
      color = black
      letterHeight = 0.035
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every frame] = $texts["text_prompt2"]
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    CodeComponent early_transition
      Code Type = Py
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      Begin Routine:
        if(consecutive_correct_responses >= criterion):
                trial_loop.finished = True
                blocks_loop.finished = True
  Routine reference
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    TextComponent reference_text
      color = black
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $texts["reference_text"]
      wrapWidth = 1.5
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    KeyboardComponent reference_response
      allowedKeys = left_key, right_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine show_stimuli
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    CodeComponent set_imgs_paths
      Code Type = Py
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      Begin Routine:
        left_img_path = os.path.join(assets_path, current_phase, Left_Stim + ".png")
        right_img_path = os.path.join(assets_path, current_phase, Right_Stim + ".png")
    ImageComponent left_stim_2
      image [set every repeat] = $left_img_path
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent right_stim_2
      image [set every repeat] = $right_img_path
      pos = (0.25, 0)
      saveStartStop = False
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent floor_line_2
      image = assets/line.png
      pos = (0, -0.08)
      saveStartStop = False
      size = (0.75, 0.0125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine copyright_info
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    TextComponent copyright
      color = black
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $texts["copyright"]
      wrapWidth = 1.5
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    KeyboardComponent copyright_response
      allowedKeys = left_key, right_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine experiment_instructions
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    TextComponent instructions1
      color = black
      letterHeight = 0.035
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $texts["instructions1"]
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    ImageComponent smiley_sample
      image = assets/smiley.png
      saveStartStop = False
      size = (0.0625, 0.0625)
      startVal [time (s)] = 0.0
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    TextComponent instructions2
      color = black
      letterHeight = 0.035
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $texts["instructions2"]
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    KeyboardComponent exp_instructions_response
      allowedKeys = left_key, right_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_setup
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    CodeComponent trial_setup_code
      Code Type = Py
      Begin Routine:
        trial_conditions_file = "./experiment_files/" + current_phase + ".csv"

        consecutive_correct_responses = 0
        transitioned_early = False

        if(current_phase == "practice"):
            criterion = 3
        elif(eval_to_criterion):
            criterion = int(expInfo["Number of pairs"]) * 2
        else:
            criterion = float("inf")
  Routine post_practice_instructions
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    TextComponent post_practice_text
      color = black
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $texts["post_practice_text"]
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    KeyboardComponent post_practice_resp
      allowedKeys = left_key, right_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent update_show_post_practice
      Code Type = Py
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      Begin Routine:
        show_post_practice = False
  Routine end_experiment
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    CodeComponent write_summary
      Code Type = Py
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      Begin Routine:
        train_accuracy /= train_trials
        train_avg_RT /= train_trials

        probe_accuracy /= probe_trials
        probe_avg_RT /= probe_trials
        info = {
                "subject": expInfo["Participant"],
                "experiment": expName,
                "experimenter": expInfo["Experimenter"],
                "date": date,
                "time": time,
                "train_accuracy": train_accuracy,
                "train_errors": train_error,
                "train_avg_rt": train_avg_RT,
                "train_trials": train_trials,
                "probe_accuracy": probe_accuracy,
                "probe_errors": probe_error,
                "probe_rt_avg": probe_avg_RT,
                "probe_trials": probe_trials
            }

        summary_file = os.path.join(summaries_path, f"{expName}_{expInfo['Participant']}_summary.csv")
        with open(summary_file, "w", newline="") as csvfile:
            writer = csv.writer(csvfile, delimiter=',', quotechar='"', quoting=csv.QUOTE_NONNUMERIC)
            writer.writerow([key for key in info])
            writer.writerow([val for val in info.values()])
    TextComponent end_text
      color = black
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $texts["end_text"]
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    KeyboardComponent end_resp
      allowedKeys = left_key, right_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine break_screen
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    ImageComponent rest_screen
      image = assets/rest_screen.png
      size = win.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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  Routine long_break_screen
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    ImageComponent long_rest_screen
      image = assets/rest_screen.png
      size = win.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      units = pix
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Flow
  Routine setup
  Routine copyright_info
  Routine reference
  Routine experiment_instructions
  LoopInitiator phases_loop loopType="TrialHandler"
    conditionsFile = experiment_files/phases.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('current_phase', 'practice')]),
      OrderedDict([('current_phase', 'training')]),
      OrderedDict([('current_phase', 'testing')])]
    Routine trial_setup
    LoopInitiator blocks_loop loopType="TrialHandler"
      loopType = random
      nReps = 1 if current_phase == "practice" else trial_num_reps[current_phase]
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      Routine long_break_screen
      LoopInitiator trial_loop loopType="TrialHandler"
        conditionsFile = $(trial_conditions_file)
        loopType = random
        nReps = trial_num_reps[current_phase] if current_phase == "practice" else 1
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        conditions:
          [OrderedDict([('pair', 'practice'), ('Left_Stim', 's3c1'), ('Right_Stim', 's3c2')]),
          OrderedDict([('pair', 'practice'), ('Left_Stim', 's3c2'), ('Right_Stim', 's3c1')])]
        Routine show_stimuli
        Routine choose
        Routine reveal
        Routine break_screen
      LoopTerminator trial_loop
    LoopTerminator blocks_loop
    LoopInitiator post_practice_screen_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 1 if show_post_practice else 0
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      Routine post_practice_instructions
    LoopTerminator post_practice_screen_loop
  LoopTerminator phases_loop
  Routine end_experiment
