PsychoPy2experiment version="2021.2.2"
Settings
  Data filename = u'data/%s_%s' % (expInfo['participant'], expName)
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  color = white
  expName = fish14
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Routines
  Routine runTrial
    CodeComponent code_3
      Code Type = Auto->JS
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      Before Experiment:
        myFaceFileName="temp"
        myLeftFishFileName="temp"
        myRightFishFileName="temp"
        showLeftFish="temp"
        showRightFish="temp"
        myFeedbackImpage="temp"
      Begin Routine:
        myFaceFileName= "fishPix/"+face+".png"
        myLeftFishFileName="fishPix/"+leftFish+".png"
        myRightFishFileName="fishPix/"+rightFish+".png"
    ImageComponent trial_face
      image [set every repeat] = $myFaceFileName
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0.1
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    TextComponent trial_text
      color = black
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
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      text:
        Which fish does this person have?
        Use LEFT or RIGHT key to choose.
    ImageComponent fishOnLeft
      image [set every repeat] = $myLeftFishFileName
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = .25
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    ImageComponent fishOnRight
      image [set every repeat] = $myRightFishFileName
      pos = (+0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.25
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    KeyboardComponent trial_response
      allowedKeys = 'left','right'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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    CodeComponent code
      Code Type = Py
      End Routine:
        nFBleft=0
        nFBright=0
        if (trial_response.keys=='left') :
            myChosen="left"
            myCircleHoriz = -0.13
        else :
            myChosen="right"
            myCircleHoriz = 0.22
        if (trial_response.keys==correctResponse) :
            myTrialCorrect=True
            thisExp.addData('Correct',1)
            myTally = myTally + 1
            myFeedbackImage="fishPix/win.png"
            myConsecutiveCorrect = myConsecutiveCorrect+1
            if (myConsecutiveCorrect >= myCriterion) :
                CriterionReached=True
        else :
            myTrialCorrect=False
            thisExp.addData('Correct',0)
            myFeedbackImage="fishPix/lose.png"
            myConsecutiveCorrect = 0
        if (correctResponse=="left") :
            showLeftFish=myLeftFishFileName
            showRightFish="fishPix/blank.png"
        else :
            showLeftFish="fishPix/blank.png"
            showRightFish=myRightFishFileName
  Routine startup
    ImageComponent terms_of_use
      image = fishPix/terms_of_use.png
      saveStartStop = False
      size = (1,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent conditions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.25
      store = nothing
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        # Fish v. 12 software, running under PsychoPy2 (v. 1.85)

        #This software was programmed by Catherine E. Myers.
        # Design is adapted from the task originally described in
        # Myers et al. (2003) Journal of Cognitive Neuroscience, 15(2),
        # 185-193.

        # Development and testing of this software was funded by the
        # Department of Veterans Affairs, Office of Research and Development,
        # through the Clinical Sciences Research & Development Program.
        # This software is in the Public Domain and may be freely copied
        # and used in non-commercial products, provided that the original
        # reference is appropriately cited and the following statement is
        # included: "This software [is adapted from software which] was
        # written by Catherine E. Myers, under funding from the Department
        # of Veterans Affairs, Office of Research and Development."

        # No guarantees are given or implied.
        # Use of this software implies acceptance of these terms.
  Routine test_instr
    TextComponent test_text1
      color = black
      letterHeight = 0.075
      pos = (0, 0.55)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Good!
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    TextComponent test_text2
      color = black
      letterHeight = 0.075
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In this part of the experiment, you will need
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    TextComponent test_text3
      color = black
      letterHeight = 0.075
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ito remember what you have learned so far.
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    TextComponent test_text4
      color = black
      letterHeight = 0.075
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You will NOT be shown the correct answers.
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    TextComponent test_text5
      color = black
      letterHeight = 0.075
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = At the end of the experiment, the computer will
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    TextComponent test_text6
      color = black
      letterHeight = 0.075
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = tell you how many you got right.
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    TextComponent test_text7
      color = black
      letterHeight = 0.075
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Good luck!
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    TextComponent test_text8
      color = black
      letterHeight = 0.075
      pos = (0, -0.55)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the LEFT or RIGHT key to begin.
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    KeyboardComponent test_instr_key
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      store = nothing
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  Routine train_instr
    TextComponent train_text1
      color = black
      letterHeight = 0.065
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welcome to the experiment.
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    TextComponent train_text2
      color = black
      letterHeight = 0.065
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You will see drawings of people who each have some pet fish.
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    TextComponent train_text3
      color = black
      letterHeight = 0.065
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Different people have different kinds of fish.
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    TextComponent train_text4
      color = black
      letterHeight = 0.065
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your job is to learn which kind of fish each person has.
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    TextComponent train_text5
      color = black
      letterHeight = 0.065
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Each time you see a face, press the LEFT or RIGHT key,
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    TextComponent train_text6
      color = black
      letterHeight = 0.065
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = depending on which fish you think the person has.
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    TextComponent train_text7
      color = black
      letterHeight = 0.065
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In the beginning, you will have to guess.
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    TextComponent train_text8
      color = black
      letterHeight = 0.065
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Try to learn the correct answers, because you will be tested later.
      wrapWidth = 50
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    TextComponent train_text9
      color = black
      letterHeight = 0.065
      pos = (0, -0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the LEFT or RIGHT key to begin.
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    KeyboardComponent train_instr_key
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.25
      store = nothing
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    CodeComponent code_train_instr
      Code Type = Py
      Begin Experiment:
        myISIduration=1.0
        myTally=0

        CriterionReached=False
        myConsecutiveCorrect=0
        myCriterion=4

        myCircleHoriz = -0.15
        myCircleVert = 0.01

        myTrialCorrect = False
        myErr1 = 0
        myCrit1 = 0
        myErr2 = 0
        myCrit2 = 0
        myErr3 = 0
        myCrit3 = 0
        myOldErr = 0
        myNewErr = 0
        myOldTrials = 0
        myNewTrials = 0
  Routine goodbye
    TextComponent goodbye_text1
      color = black
      letterHeight = 0.08
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The end.
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    TextComponent goodbye_text2
      color = black
      letterHeight = 0.08
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your final point total was:
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    TextComponent goodbye_tally
      color = black
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $myTally
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    TextComponent goodbye_text3
      color = black
      letterHeight = 0.08
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thanks for participating.
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    TextComponent goodbye_text4
      color = black
      letterHeight = 0.05
      pos = (0, -.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar to exit.
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    KeyboardComponent goodbye_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.25
      store = nothing
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    CodeComponent code_6
      Code Type = Auto->JS
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      End Experiment:
        thisExp.addData('Err1',myErr1)
        thisExp.addData('Err2',myErr2)
        thisExp.addData('Err3',myErr3)
        thisExp.addData('Crit1',myCrit1)
        thisExp.addData('Crit2',myCrit2)
        thisExp.addData('Crit3',myCrit3)
        thisExp.addData('PctErrTestOld',100*myOldErr/myOldTrials)
        thisExp.addData('PctErrTestNew',100*myNewErr/myNewTrials)
  Routine doFB1
    ImageComponent FB2_face
      durationEstim = 1
      image [set every repeat] = $myFaceFileName
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB2_Circle
      durationEstim = 1
      image = fishPix/TheCircle.jpg
      pos [set every repeat] = [myCircleHoriz, myCircleVert]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB1_leftFish
      durationEstim = 1
      image [set every repeat] = $showLeftFish
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB1_rightFish
      durationEstim = 1
      image [set every repeat] = $showRightFish
      pos = (+0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB1_text
      durationEstim = 1
      image [set every repeat] = $myFeedbackImage
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    CodeComponent FB1_code
      Code Type = Py
      End Routine:
        if (myTrialCorrect==False) :
            myErr1 += 1
        if (CriterionReached==True) :
            trials1.finished=True
            myCrit1 = 1
  Routine doFB2
    ImageComponent FB2_face_2
      durationEstim = 1
      image [set every repeat] = $myFaceFileName
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB2_Circle_2
      durationEstim = 1
      image = fishPix/TheCircle.jpg
      pos [set every repeat] = [myCircleHoriz, myCircleVert]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB2_leftFish
      durationEstim = 1
      image [set every repeat] = $showLeftFish
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB2_rightFish
      durationEstim = 1
      image [set every repeat] = $showRightFish
      pos = (+0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB2_text
      durationEstim = 1
      image [set every repeat] = $myFeedbackImage
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    CodeComponent FB2_code
      Code Type = Py
      End Routine:
        if (myTrialCorrect==False) :
            myErr2 += 1
        if (CriterionReached==True) :
            trials2.finished=True
            myCrit2 = 1
  Routine doFB3
    ImageComponent FB3_face
      durationEstim = 1
      image [set every repeat] = $myFaceFileName
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB3_Circle
      durationEstim = 1
      image = fishPix/TheCircle.jpg
      pos [set every repeat] = [myCircleHoriz, myCircleVert]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB3_leftFish
      durationEstim = 1
      image [set every repeat] = $showLeftFish
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB3_rightFish
      durationEstim = 1
      image [set every repeat] = $showRightFish
      pos = (+0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB3_text
      durationEstim = 1
      image [set every repeat] = $myFeedbackImage
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    CodeComponent FB3_code
      Code Type = Py
      End Routine:
        if (myTrialCorrect==False) :
            myErr3 += 1
        if (CriterionReached==True) :
            trials3.finished=True
            myCrit3 = 1
  Routine noFB
    ImageComponent noFB_face
      durationEstim = 1
      image [set every repeat] = $myFaceFileName
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent noFB_Circle
      durationEstim = 1
      image = fishPix/TheCircle.jpg
      pos [set every repeat] = [myCircleHoriz, myCircleVert]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = myISIduration
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    ImageComponent noFB_leftFish
      durationEstim = 1
      image [set every repeat] = $myLeftFishFileName
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent noFB_rightFish
      durationEstim = 1
      image [set every repeat] = $myRightFishFileName
      pos = (+0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        if (phase_used==4) :
            myNewTrials+=1
        else :
            myOldTrials+=1
        if (myTrialCorrect==False) :
            if (phase_used==4) :
                myNewErr+=1
            else :
                myOldErr+=1
  Routine next_stage
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        CriterionReached=False
        myConsecutiveCorrect=0
        myCriterion = myCriterion+4
Flow
  Routine startup
  Routine train_instr
  LoopInitiator trials1 loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = fish14_ExpStim.xlsx
    loopType = random
    nReps = 5
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    Routine runTrial
    Routine doFB1
  LoopTerminator trials1
  Routine next_stage
  LoopInitiator trials2 loopType="TrialHandler"
    Selected rows = 0:8
    conditionsFile = fish14_ExpStim.xlsx
    loopType = random
    nReps = 5
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    Routine runTrial
    Routine doFB2
  LoopTerminator trials2
  Routine next_stage
  LoopInitiator trials3 loopType="TrialHandler"
    Selected rows = 0:12
    conditionsFile = fish14_ExpStim.xlsx
    loopType = random
    nReps = 5
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    Routine runTrial
    Routine doFB3
  LoopTerminator trials3
  Routine test_instr
  LoopInitiator test_trials loopType="TrialHandler"
    Selected rows = 0:16
    conditionsFile = fish14_ExpStim.xlsx
    loopType = random
    nReps = 3
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    Routine runTrial
    Routine noFB
  LoopTerminator test_trials
  Routine goodbye
